PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = norm
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = blockedTrials
  Screen = 1
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Routines
  Routine trial
    CodeComponent eyetracker
      Begin Experiment:
        # import needed modules
        import tobii_research as tr
        import time
        import csv
        # find eye trackers
        found_eyetrackers = tr.find_all_eyetrackers()
        # select first eye tracker
        my_eyetracker = found_eyetrackers[0]
        # create list in which we append gaze data
        gaze_list = []
        # create call back to get gaze data
        def gaze_data_callback(gaze_data):
            # append ts, gpl and gpr
             gaze_list.append([gaze_data['system_time_stamp'],gaze_data['device_time_stamp']
        ,gaze_data['left_gaze_point_on_display_area'],gaze_data['right_gaze_point_on_display_area']])
        # start getting gaze data
        my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
      Begin Routine:
        trialStartTime = time.time()
        trials.addData('trial.start',trialStartTime)
      End Experiment:
        # stop getting gaze data
        my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)


        if len(gaze_list) > 0:
            with open(filename+'_et.csv', 'w') as f:
                w = csv.writer(f, delimiter=";")
                w.writerow(['ts','etts','gpl','gpr']) # header
                for row in gaze_list: # iterate all items
                    w.writerow(row) # write row in csv
        else:
            print "No gaze data to save!"
    ImageComponent image
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.5
      image [set every repeat] = $stimFile
      size = (0.5,0.5)
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  Routine readyMessage
    TextComponent text
      text [set every repeat] = $readyMsg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = chooseBlock.csv
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [{'readyMsg': u'This is a block of faces', 'condsFile': u'facesBlock.csv'},
      {'readyMsg': u'This is a block of houses', 'condsFile': u'housesBlock.csv'}]
    Routine readyMessage
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
